PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = untitled
  Screen = 1
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Routines
  Routine trial
  Routine tes
    TextComponent text
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine tes
  LoopTerminator trials
